PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent whole_image
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -0.0275, 0.9765, -1.0000
      lineWidth = 2
      opacity = 0.5
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image
      image [set every repeat] = $filepath
      size = 0.5,0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent mouth
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 1.0000, -1.0000, -1.0000
      opacity = 0.4
      pos = (0, -0.028)
      shape = rectangle
      size = (0.12, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent nose
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, 1.0000
      opacity = 0.4
      pos = (0, 0.013)
      shape = rectangle
      size = (0.10, 0.036)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent eyes
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 1.0000, -1.0000, 1.0000
      opacity = 0.4
      pos = (0.008, 0.053)
      shape = rectangle
      size = (0.18, 0.035)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent forehead
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 1.0000, -1.0000, -1.0000
      opacity = 0.4
      pos = (0.008, 0.1)
      shape = rectangle
      size = (0.17, 0.045)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Human Stimuli  - Human Stimuli.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Type', 'Human'), ('Spatial_Frequency', 'LSF'), ('filepath', 'Stimuli For Psychopy/Human/matched-8-cpi-low-Rafd090_01_Caucasian_female_neutral_frontal.jpg'), ('file_name', 'matched-8-cpi-low-Rafd090_01_Caucasian_female_neutral_frontal.jpg')]),
      OrderedDict([('Type', 'Human'), ('Spatial_Frequency', 'LSF'), ('filepath', 'Stimuli For Psychopy/Human/matched-8-cpi-low-Rafd090_12_Caucasian_female_neutral_frontal.jpg'), ('file_name', 'matched-8-cpi-low-Rafd090_12_Caucasian_female_neutral_frontal.jpg')]),
      OrderedDict([('Type', 'Human'), ('Spatial_Frequency', 'LSF'), ('filepath', 'Stimuli For Psychopy/Human/matched-8-cpi-low-Rafd090_16_Caucasian_female_neutral_frontal.jpg'), ('file_name', 'matched-8-cpi-low-Rafd090_16_Caucasian_female_neutral_frontal.jpg')]),
      OrderedDict([('Type', 'Human'), ('Spatial_Frequency', 'LSF'), ('filepath', 'Stimuli For Psychopy/Human/matched-8-cpi-low-Rafd090_18_Caucasian_female_neutral_frontal.jpg'), ('file_name', 'matched-8-cpi-low-Rafd090_18_Caucasian_female_neutral_frontal.jpg')]),
      OrderedDict([('Type', 'Human'), ('Spatial_Frequency', 'LSF'), ('filepath', 'Stimuli For Psychopy/Human/matched-8-cpi-low-Rafd090_19_Caucasian_female_neutral_frontal.jpg'), ('file_name', 'matched-8-cpi-low-Rafd090_19_Caucasian_female_neutral_frontal.jpg')])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
    Routine trial
  LoopTerminator trials
