PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = trial_experiment
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent whole_image
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 1.0000, 1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image
      image [set every repeat] = $filepath
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent forehead
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 1.0000, -1.0000, -1.0000
      opacity = 0.5
      pos = (0, 0.10)
      shape = rectangle
      size = (0.25, 0.066)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent eyes
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, 1.0000
      opacity = 0.5
      pos = (0, 0.018)
      shape = rectangle
      size = (0.29, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent nose
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, 1.0000, -1.0000
      opacity = 0.5
      pos = (0, -0.055)
      shape = rectangle
      size = (0.2, 0.055)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent mouth
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 1.0000, -0.4588, -1.0000
      opacity = 0.5
      pos = (0, -0.13)
      shape = rectangle
      size = (0.21, 0.07)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = humanoid_images.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Type': 'Humanoid', 'Spatial_Frequency': 'BSF', 'filepath': 'Stimuli For Psychopy\\Robotic\\matched-c48.jpeg', 'file_name': 'matched-c48.jpeg'},
      {'Type': 'Humanoid', 'Spatial_Frequency': 'BSF', 'filepath': 'Stimuli For Psychopy\\Robotic\\matched-c58.jpeg', 'file_name': 'matched-c58.jpeg'},
      {'Type': 'Humanoid', 'Spatial_Frequency': 'BSF', 'filepath': 'Stimuli For Psychopy\\Robotic\\matched-c61.jpeg', 'file_name': 'matched-c61.jpeg'},
      {'Type': 'Humanoid', 'Spatial_Frequency': 'BSF', 'filepath': 'Stimuli For Psychopy\\Robotic\\matched-c63.jpeg', 'file_name': 'matched-c63.jpeg'},
      {'Type': 'Humanoid', 'Spatial_Frequency': 'BSF', 'filepath': 'Stimuli For Psychopy\\Robotic\\matched-c64.jpeg', 'file_name': 'matched-c64.jpeg'},
      {'Type': 'Humanoid', 'Spatial_Frequency': 'BSF', 'filepath': 'Stimuli For Psychopy\\Robotic\\matched-c65.jpeg', 'file_name': 'matched-c65.jpeg'},
      {'Type': 'Humanoid', 'Spatial_Frequency': 'BSF', 'filepath': 'Stimuli For Psychopy\\Robotic\\matched-c66.jpeg', 'file_name': 'matched-c66.jpeg'},
      {'Type': 'Humanoid', 'Spatial_Frequency': 'BSF', 'filepath': 'Stimuli For Psychopy\\Robotic\\matched-c67.jpeg', 'file_name': 'matched-c67.jpeg'},
      {'Type': 'Humanoid', 'Spatial_Frequency': 'BSF', 'filepath': 'Stimuli For Psychopy\\Robotic\\matched-c69.jpeg', 'file_name': 'matched-c69.jpeg'},
      {'Type': 'Humanoid', 'Spatial_Frequency': 'BSF', 'filepath': 'Stimuli For Psychopy\\Robotic\\matched-c71.jpeg', 'file_name': 'matched-c71.jpeg'}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
    Routine trial
  LoopTerminator trials
