PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = trial_experiment
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent whole_image
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 1.0000, 1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image
      image [set every repeat] = $filepath
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent eyes
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, 1.0000
      opacity = 0.5
      pos = (0, 0.02)
      shape = rectangle
      size = (0.34, 0.16)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent mouth
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 1.0000, -0.4588, -1.0000
      opacity = 0.5
      pos = (0, -0.12)
      shape = rectangle
      size = (0.29, 0.11)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = robotic_images.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Type': 'Mechanical', 'Spatial_Frequency': 'BSF', 'filepath': 'Stimuli For Psychopy\\Robotic\\matched-c10.jpeg', 'file_name': 'matched-c10.jpeg'},
      {'Type': 'Mechanical', 'Spatial_Frequency': 'BSF', 'filepath': 'Stimuli For Psychopy\\Robotic\\matched-c11.jpeg', 'file_name': 'matched-c11.jpeg'},
      {'Type': 'Mechanical', 'Spatial_Frequency': 'BSF', 'filepath': 'Stimuli For Psychopy\\Robotic\\matched-c12.jpeg', 'file_name': 'matched-c12.jpeg'},
      {'Type': 'Mechanical', 'Spatial_Frequency': 'BSF', 'filepath': 'Stimuli For Psychopy\\Robotic\\matched-c14.jpeg', 'file_name': 'matched-c14.jpeg'},
      {'Type': 'Mechanical', 'Spatial_Frequency': 'BSF', 'filepath': 'Stimuli For Psychopy\\Robotic\\matched-c16.jpeg', 'file_name': 'matched-c16.jpeg'},
      {'Type': 'Mechanical', 'Spatial_Frequency': 'BSF', 'filepath': 'Stimuli For Psychopy\\Robotic\\matched-c17.jpeg', 'file_name': 'matched-c17.jpeg'},
      {'Type': 'Mechanical', 'Spatial_Frequency': 'BSF', 'filepath': 'Stimuli For Psychopy\\Robotic\\matched-c43.jpeg', 'file_name': 'Matched-c43.jpeg'},
      {'Type': 'Mechanical', 'Spatial_Frequency': 'BSF', 'filepath': 'Stimuli For Psychopy\\Robotic\\matched-c27.jpeg', 'file_name': 'matched-c27.jpeg'},
      {'Type': 'Mechanical', 'Spatial_Frequency': 'BSF', 'filepath': 'Stimuli For Psychopy\\Robotic\\matched-c33.jpeg', 'file_name': 'matched-c33.jpeg'},
      {'Type': 'Mechanical', 'Spatial_Frequency': 'BSF', 'filepath': 'Stimuli For Psychopy\\Robotic\\matched-c35.jpeg', 'file_name': 'matched-c35.jpeg'}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
    Routine trial
  LoopTerminator trials
