PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Human_uncanny
  eyetracker = Pupil Labs
  keyboardBackend = ioHub
  plConfidenceThreshold = 0.6
  plPupilCaptureRecordingEnabled = True
  plPupilRemoteAddress = 127.0.0.1
  plPupilRemotePort = 50020
  plPupilRemoteTimeoutMs = 1000
  plPupillometryOnly = False
  plSurfaceName = psychopy_iohub_surface
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Routines
  Routine recording
  Routine Fixation_cross
    PolygonComponent Fixation
      fillColor = red
      lineColor = red
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine Fixation_cross_2
  Routine Mechano_Human_likeness
    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        thisPos_2 = 0
      Each Frame:
        thisPos_2 = M_H_likeness_slider.getMarkerPos()
        formatted_thisPos_2=np.round(thisPos_2,1)

        #formatted_thisPos=str.format('{0:.3f}', thisPos)
    SliderComponent M_H_likeness_slider
      forceEndRoutine = False
      granularity = 0
      initVal = 0.00
      labels = "Mechanical","Human"
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (0, 100)
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    TextComponent ratingText_2
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $'Current rating : ' + str(formatted_thisPos_2)
    ImageComponent image_2
      image = Button_Image.png
      pos = (0.49, -0.43)
      size = (0.33, 0.106)
      startVal [condition] = M_H_likeness_slider.rating
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    MouseComponent mouse_2
      clickable = image_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [condition] = M_H_likeness_slider.rating
      syncScreenRefresh = True
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    TextComponent instruct_Mechano_humannnes
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Rate the Mechano-Humannes 
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  Routine Likeability
    CodeComponent code
      Code Type = Py
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      Begin Routine:
        thisPos_4 = 0
      Each Frame:
        thisPos_4 = Likebility_slider_3.getMarkerPos()
        formatted_thisPos_4=np.round(thisPos_4,1)

        #formatted_thisPos=str.format('{0:.3f}', thisPos)
    SliderComponent Likebility_slider_3
      forceEndRoutine = False
      granularity = 0
      initVal = 0.00
      labels = "Least","Most"
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (-100, 100)
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    TextComponent ratingText
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $'Current rating : ' + str(formatted_thisPos_4)
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    ImageComponent image
      image = Button_Image.png
      pos = (0.49, -0.43)
      size = (0.33, 0.106)
      startVal [condition] = Likebility_slider_3.rating
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    MouseComponent mouse
      clickable = image
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = Likebility_slider_3.rating
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    TextComponent instruct_Likeability_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Rate the Likeability
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  Routine ISI
    StaticComponent ISI_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Human_Stimuli
    ImageComponent Human_image
      image [set every repeat] = $filepath
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    RegionOfInterestComponent roi
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = (0, 0)
      save = every look
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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  Routine Likeability_2
    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        thisPos_4 = 0
      Each Frame:
        thisPos_4 = slider.getMarkerPos()
        formatted_thisPos_4=np.round(thisPos_4,2)

        #formatted_thisPos=str.format('{0:.3f}', thisPos)
    SliderComponent slider_4
      forceEndRoutine = False
      granularity = 0
      initVal = 0.00
      labels = "Mechanical","Human"
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (-100, 100)
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    TextComponent ratingText_4
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $'Current rating : ' + str(formatted_thisPos_4)
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    ImageComponent image_4
      image = Button_Image.png
      pos = (0.49, -0.43)
      size = (0.33, 0.106)
      startVal [condition] = slider_4.rating
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    MouseComponent mouse_4
      clickable = image_4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = slider_4.rating
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  Routine Proceed
    TextComponent instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = PRESS SPACE BAR TO PROCEED TO EXPERIMENT 
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine eye_tracker_rt
    EyetrackerRecordComponent etRecord
      actionType = Start Only
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine eye_tracker_rt_stop
    EyetrackerRecordComponent etRecord_2
      actionType = Stop Only
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    textColor = white
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine calibration
  Routine Proceed
  Routine eye_tracker_rt
  LoopInitiator human_trials loopType="TrialHandler"
    conditionsFile = Human Stimuli  - Human Stimuli.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Sl_no', 1), ('Type', 'Human'), ('Spatial_Frequency', 'LSF'), ('filepath', 'Stimuli For Psychopy/Human/matched-8-cpi-low-Rafd090_18_Caucasian_female_neutral_frontal.jpg'), ('File_name', 'matched-8-cpi-low-Rafd090_18_Caucasian_female_neutral_frontal.jpg')]),
      OrderedDict([('Sl_no', 2), ('Type', 'Human'), ('Spatial_Frequency', 'LSF'), ('filepath', 'Stimuli For Psychopy/Human/matched-8-cpi-low-Rafd090_19_Caucasian_female_neutral_frontal.jpg'), ('File_name', 'matched-8-cpi-low-Rafd090_19_Caucasian_female_neutral_frontal.jpg')]),
      OrderedDict([('Sl_no', 3), ('Type', 'Human'), ('Spatial_Frequency', 'LSF'), ('filepath', 'Stimuli For Psychopy/Human/matched-8-cpi-low-Rafd090_20_Caucasian_male_neutral_frontal.jpg'), ('File_name', 'matched-8-cpi-low-Rafd090_20_Caucasian_male_neutral_frontal.jpg')]),
      OrderedDict([('Sl_no', 4), ('Type', 'Human'), ('Spatial_Frequency', 'LSF'), ('filepath', 'Stimuli For Psychopy/Human/matched-8-cpi-low-Rafd090_21_Caucasian_male_neutral_frontal.jpg'), ('File_name', 'matched-8-cpi-low-Rafd090_21_Caucasian_male_neutral_frontal.jpg')]),
      OrderedDict([('Sl_no', 5), ('Type', 'Human'), ('Spatial_Frequency', 'LSF'), ('filepath', 'Stimuli For Psychopy/Human/matched-8-cpi-low-Rafd090_22_Caucasian_female_neutral_frontal.jpg'), ('File_name', 'matched-8-cpi-low-Rafd090_22_Caucasian_female_neutral_frontal.jpg')])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
    Routine Fixation_cross
    Routine Human_Stimuli
    Routine Mechano_Human_likeness
    Routine ISI
  LoopTerminator human_trials
  Routine eye_tracker_rt_stop
